# ------ Include Files ------
includeFile = ./supportFiles/cell_parameters_A549.txt
includeFile = ./supportFiles/np_parameters_AuNP.txt
includeFile = ./supportFiles/source_parameters_I125Beam.txt

s:Sc/EnergyToCell/OutputFile        = "EnergyToCell"
s:Sc/NucleusPHSP/OutputFile	    = "nucleus_PHSP_electrons"
s:Sc/DoseToNucleus_Total/OutputFile   = "DoseToNucleus_Total"
s:Ge/MediumNPPositionsFile     = "./supportFiles/positions_in_medium_1179_AuNPs.txt"   # AGuIX: 1308200_AGuIX, AuNP: 1179_AuNPs, Water: 1_NP  (values corresponding to 1 mg/ml)
s:Ge/CellNPPositionsFile       = "./supportFiles/positions_in_cell_55000_AuNPs.txt"   # AGuIX: 555000_AGuIX, AuNP: 35370 / 5000_AuNPs, Water: positions_in_cell_1_NP

s:Ge/CellPHSPName    = "I125Beam_PHSP"

###########
# Sources #
###########

# --- Phase Space ----

s:So/PhSpSourceSup/Type 				       = "PhaseSpace"
s:So/PhSpSourceSup/PhaseSpaceFileName			       = Ge/CellPHSPName
s:So/PhSpSourceSup/Component				       = "World"
b:So/PhSpSourceSup/PhaseSpaceIncludeEmptyHistories             = "False" # defaults to false
u:So/PhSpSourceSup/PhaseSpaceScaleXPosBy                       = 0.001 # turns the source phsp into a 30 um diameter disc
u:So/PhSpSourceSup/PhaseSpaceScaleYPosBy                       = 0.001
b:So/PhSpSourceSup/PhaseSpacePreCheck                          = "False" # defaults to true


############
# Geometry #
############

Ge/QuitIfOverlapDetected = "false"

d:Ge/SourceRMax = Ge/RCell + Ge/ElectronRangePH1 um

# ---- World ----
s:Ge/World/Material    = "G4_WATER"
#s:Ge/World/Type        = "TsCylinder"
d:Ge/World/HLX         = 1.01 * Ge/SourceRMax um
d:Ge/World/HLY         = 1.01 * Ge/SourceRMax um
d:Ge/World/HLZ         = Ge/ElectronRangePH1 + Ge/HLCell um
b:Ge/World/Invisible   = "F"


# ---- Polystirene cell plate ----
s:Ge/CellPlate/Parent = "World"
s:Ge/CellPlate/Type = "TsCylinder"
s:Ge/CellPlate/Material    = "G4_POLYSTYRENE"
d:Ge/CellPlate/RMax         = Ge/World/HLX  um
d:Ge/CellPlateThickness           = 2000 um
d:Ge/CellPlate/HL           = 0.5 * Ge/ElectronRangePH1 um
d:Ge/CellPlateNegHL          = -1 * Ge/CellPlate/HL um
d:Ge/CellPlate/TransZ          = Ge/CellPlateNegHL - Ge/HLCell um

# ---- Cell Layer ----
s:Ge/CellLayer/Parent = "World"
s:Ge/CellLayer/Type = "TsCylinder"
s:Ge/CellLayer/Material    = "MediumMaterial"
d:Ge/CellLayer/RMax         = Ge/SourceRMax um
d:Ge/CellLayer/HL           = Ge/HLCell um

# ---- Cell ----
s:Ge/Cell/Type                        = "TsDistributedComponents"
s:Ge/Cell/Parent                      = "CellLayer"
s:Ge/Cell/ComponentType               = "G4Tubs"
s:Ge/Cell/Material                    = "G4_WATER"
d:Ge/Cell/ComponentRadius             = Ge/RCell um
d:Ge/Cell/ComponentHL                 = Ge/HLCell um
d:Ge/Cell/ElementRadius	              = Ge/RNP nm
s:Ge/Cell/ElementMaterial             = Ma/NPMaterial
s:Ge/Cell/PositionsFile 	          = Ge/CellNPPositionsFile

# Nucleus
s:Ge/Nucleus/Type                       = "TsNucleus"
s:Ge/Nucleus/Parent                     = "World"
s:Ge/Nucleus/Material                   = "G4_WATER"
s:Ge/Nucleus/Color                      = "White"
s:Ge/Nucleus/DNAModel					= "Sphere"
d:Ge/Nucleus/NucleusRadius              = 4.65 um
i:Ge/Nucleus/HilbertCurveLayer          = 4
i:Ge/Nucleus/HilbertCurve3DRepeat       = 30
s:Ge/Nucleus/HilbertCurveFileName       = "supportFiles/HilbertPoints_iteration1.dat"
s:Ge/Nucleus/Voxel/Material             = "G4_WATER"
b:Ge/Nucleus/ShowDNAVoxels              = "false"
s:Ge/Nucleus/ChromatinFiber/Material    = "G4_WATER"
b:Ge/Nucleus/ShowChromatinCylinders     = "false"
s:Ge/Nucleus/Histone/Material           = "G4_HistoneMaterial"
b:Ge/Nucleus/OnlyBuildOneHistone        = "false"
b:Ge/Nucleus/HistoneAsScavenger         = "true"
b:Ge/Nucleus/AddBases                   = "true"
s:Ge/Nucleus/Base1/Material             = "G4_BaseMaterial"
s:Ge/Nucleus/Base2/Material             = "G4_BaseMaterial"
b:Ge/Nucleus/AddBackbones               = "true"
s:Ge/Nucleus/Backbone1/Material         = "G4_BackboneMaterial"
s:Ge/Nucleus/Backbone2/Material         = "G4_BackboneMaterial"
b:Ge/Nucleus/AddHydrationShell          = "true"
s:Ge/Nucleus/HydrationShell1/Material   = "G4_WATER_MODIFIED"
s:Ge/Nucleus/HydrationShell2/Material   = "G4_WATER_MODIFIED"

# ---- Incubation medium with material mixture ----
s:Ge/MediumVol/Parent      = "World"
s:Ge/MediumVol/Type        = "TsCylinder"
s:Ge/MediumVol/Material    = "MediumMaterial"
d:Ge/MediumVol/RMax        = Ge/SourceRMax um
d:Ge/MediumVol/HL          = 0.5 * Ge/ElectronRangePH1 um 
d:Ge/MediumVolTransZ      = Ge/MediumVol/HL + Ge/HLCell um
d:Ge/MediumVol/TransZ      = Ge/MediumVolTransZ + 0.001 um     # small shif to avoid frontiers problems generating core dump

# ---- Incubation medium with NPs ----
d:Ge/MediumDetailedThickness            = 0.2 um
s:Ge/MediumDetailed/Parent            = "MediumVol"
s:Ge/MediumDetailed/Type              = "TsDistributedComponents"
s:Ge/MediumDetailed/Material          = "G4_WATER"
s:Ge/MediumDetailed/ComponentType     = "G4Tubs"
d:Ge/MediumDetailed/ComponentRadius   = 1.25 * Ge/RNucleus um
d:Ge/MediumDetailed/ComponentHL       = 0.5 * Ge/MediumDetailedThickness um 
d:Ge/MediumDetailed/ElementRadius	  = Ge/RNP nm
s:Ge/MediumDetailed/ElementMaterial   = Ma/NPMaterial
s:Ge/MediumDetailed/PositionsFile 	  = Ge/MediumNPPositionsFile
d:Ge/MediumDetailed/TransZ            = Ge/MediumDetailed/ComponentHL - Ge/MediumVol/HL um

#############
# Materials #
#############


# -- Materials
s:Ma/G4_HistoneMaterial/CloneFromMaterial   = "G4_WATER"
d:Ma/G4_HistoneMaterial/CloneWithDensity    = 1.407 g/cm3
s:Ma/G4_BaseMaterial/CloneFromMaterial      = "G4_WATER"
d:Ma/G4_BaseMaterial/CloneWithDensity       = 1.0 g/cm3
s:Ma/G4_BackboneMaterial/CloneFromMaterial  = "G4_WATER"
d:Ma/G4_BackboneMaterial/CloneWithDensity   = 1.0 g/cm3
s:Ma/G4_WATER_MODIFIED/CloneFromMaterial    = "G4_WATER"
d:Ma/G4_WATER_MODIFIED/CloneWithDensity     = 1.0 g/cm3

b:Ma/MediumMaterial/BuildFromMaterials  = "True"
sv:Ma/MediumMaterial/Components         = 2 "G4_WATER" Ma/NPMaterial   
uv:Ma/MediumMaterial/Fractions          = 2 0.999000999 0.00099900099 # use corresponding concentration of NPs
d:Ma/MediumMaterial/Density             = 1.001 g/cm3
s:Ma/MediumMaterial/DefaultColor        = "yellow"

###########
# Scorers #
###########

b:Sc/DoseNucleus_Total/Active                         = "True"
s:Sc/DoseNucleus_Total/Quantity                       = "DoseToMedium"
s:Sc/DoseNucleus_Total/Component                      = "Nucleus"
sv:Sc/DoseNucleus_Total/Report                        = 7 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Histories"
s:Sc/DoseNucleus_Total/IfOutputFileAlreadyExists      = "Overwrite"
s:Sc/DoseNucleus_Total/OutputType                     = "csv"
#s:Sc/DoseNucleus_Total/OutputFile                    = "DoseToNucleus_Total"
b:Sc/DoseNucleus_Total/PropagateToChildren		      = "True"
#sv:Sc/DoseNucleus_Total/OnlyIncludeParticlesNamed     = 1 "e-"



b:Sc/EnergyToCell/Active                         = "True"
s:Sc/EnergyToCell/Quantity                       = "EnergyDeposit"
s:Sc/EnergyToCell/Component                      = "Cell"
sv:Sc/EnergyToCell/Report                        = 7 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Histories"
s:Sc/EnergyToCell/IfOutputFileAlreadyExists      = "Overwrite"
s:Sc/EnergyToCell/OutputType                     = "csv"
#s:Sc/EnergyToCell/OutputFile                    = "EnergyToCell"
b:Sc/EnergyToCell/PropagateToChildren		      = "False"
sv:Sc/EnergyToCell/OnlyIncludeIfInMaterial		      = 1 "G4_WATER"


# -- Scorer --
includeFile									= supportFiles/DNAScorerStepByStep.txt
s:Sc/DNADamageScorer/Quantity				= "DNADamageNucleusStepByStep"
s:Sc/DNADamageScorer/Component 				= "Nucleus"
i:Sc/DNADamageScorer/NumberOfHistoriesInRun = 1
d:Sc/DNADamageScorer/ScoringRadius			= Ge/Nucleus/NucleusRadius um
i:Sc/DNADamageScorer/BasePairPositionAtGeometricHierarchy = 0
sv:Sc/DNADamageScorer/Strand1MaterialNames  = 4 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial" "G4_HistoneMaterial"
sv:Sc/DNADamageScorer/Strand2MaterialNames  = 3 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial"
s:Sc/DNADamageScorer/PrimaryParticle		= "e-"
d:Sc/DNADamageScorer/MeanEnergy				= 30 keV
#d:Sc/DNADamageScorer/StopTrackingAtDose		= 0.5 gray
d:Sc/DNADamageScorer/ImageXMinPosition		= 0 um - Ge/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageXMaxPosition		= Ge/Nucleus/NucleusRadius um
d:Sc/DNADamageScorer/ImageYMinPosition		= 0 um - Ge/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageYMaxPosition		= Ge/Nucleus/NucleusRadius um
d:Sc/DNADamageScorer/ImageZMinPosition		= 0 um - Ge/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageZMaxPosition		= Ge/Nucleus/NucleusRadius um

# Geometry file for Nucleus scorer
s:Sc/DNADamageScorer/GeometryInfo			= "supportFiles/Geoinfo.txt"
s:Sc/DNADamageScorer/FileVoxelCopyNumbersInsideNucleus = "supportFiles/CopyNoTable.txt"
s:Sc/DNADamageScorer/MapChromosomeVoxelsFile = "supportFiles/signedCHVoxel.txt"

###########
# Physics #
###########


Ph/Default/Modules = 3 "g4em-dna" "TsEmDNAPhysics" "TsEmDNAChemistry" # "g4em-dna"  "g4em-livermore"
b:Ph/ListProcesses = "False"
#b:Ph/Default/PhysicsForGold/Active = "True"
#s:Ph/Default/PhysicsForGold/Region = Ge/Cell/AssignToRegionNamed
d:Ph/Default/SetProductionCutLowerEdge  	= 10 eV
d:Ph/Default/SetProductionCutHighEdge  		= 1 MeV
d:Ph/Default/CutForAllParticles  		= 0.1 nm
b:Ph/Default/Fluorescence  			= "True" # Set to true to turn on Fluorescence
b:Ph/Default/Auger 				= "True" # Set to true to turn on Auger
b:Ph/Default/AugerCascade 			= "True" # Set to true to turn on AugerCascade
b:Ph/Default/DeexcitationIgnoreCut 		= "True" # Set to true to implement DeexcitationIgnoreCut
b:Ph/Default/PIXE 				= "True" # Set to true to turn on PIXE"
d:Ph/Default/LowestElectronEnergy 		= 10 eV # 

#s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" 
#s:Ph/Default/SolvatedElectronThermalizationModel =  "Ritchie"


includeFile				= supportFiles/TOPAS-DefaultReactions.txt
s:Ch/ChemistryName			= "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive    = "True"
u:Ch/TOPASChemistry/Temperature = 37.0
b:Ch/TOPASChemistry/ApplyCorrectionScalingForTemperature = "True"

###########
# Graphics #
###########
b:Gr/View/IncludeAxes = "F"
d:Gr/View/AxesSize    = 5 mm
b:Gr/Enable          = "F"
b:Ts/UseQt = "F"
sv:Gr/OnlyIncludeParticlesNamed        = 1 "e-"

s:Gr/View/Type        = "OpenGL"

i:Ts/ShowHistoryCountAtInterval = 10000
i:So/PhSpSourceSup/PhaseSpaceMultipleUse  = 1

Tf/NumberOfSequentialTimes = 1

i:Ts/NumberOfThreads = -2 # defaults to 1
i:Ts/Seed = 22017
b:Ts/PauseBeforeQuit = "F"

b:Ts/ShowCPUTime = "True"
Ts/ParameterizationErrorMaxReports				= 1


