# ------ Include Files ------
includeFile = ./supportFiles/cell_parameters_A549.txt
includeFile = ./supportFiles/np_parameters_AuNP.txt
includeFile = ./supportFiles/source_parameters_I125Beam.txt

s:Sc/EnergyToCell/OutputFile        = "EnergyToCell"
s:Sc/NucleusPHSP/OutputFile	    = "nucleus_PHSP"
s:Sc/DoseToNucleus_Total/OutputFile   = "DoseToNucleus_Total"
s:Ge/MediumNPPositionsFile     = "./supportFiles/positions_in_medium_1179_AuNPs.txt"   # AGuIX: 1308200_AGuIX, AuNP: 1179_AuNPs, Water: 1_NP  (values corresponding to 1 mg/ml)
s:Ge/CellNPPositionsFile       = "./supportFiles/positions_in_cell_55000_AuNPs.txt"   # AGuIX: 555000_AGuIX, AuNP: 35370 / 5000_AuNPs, Water: positions_in_cell_1_NP

s:Ge/CellPHSPName    = "I125Beam_PHSP"

###########
# Sources #
###########

# --- Phase Space ----

s:So/PhSpSourceSup/Type 				       = "PhaseSpace"
s:So/PhSpSourceSup/PhaseSpaceFileName			       = Ge/CellPHSPName
s:So/PhSpSourceSup/Component				       = "World"
b:So/PhSpSourceSup/PhaseSpaceIncludeEmptyHistories             = "False" # defaults to false
u:So/PhSpSourceSup/PhaseSpaceScaleXPosBy                       = 0.001 # turns the source phsp into a 30 um diameter disc
u:So/PhSpSourceSup/PhaseSpaceScaleYPosBy                       = 0.001
b:So/PhSpSourceSup/PhaseSpacePreCheck                          = "False" # defaults to true


############
# Geometry #
############

d:Ge/SourceRMax = Ge/RCell + Ge/ElectronRangePH1 um

# ---- World ----
s:Ge/World/Material    = "G4_WATER"
#s:Ge/World/Type        = "TsCylinder"
d:Ge/World/HLX         = 1.5 * Ge/SourceRMax um
d:Ge/World/HLY         = 1.5 * Ge/SourceRMax um
d:Ge/World/HLZ         = Ge/ElectronRangePH1 + Ge/HLCell um
b:Ge/World/Invisible   = "F"

# ---- Polystirene cell plate ----
s:Ge/CellPlate/Parent = "World"
s:Ge/CellPlate/Type = "TsCylinder"
s:Ge/CellPlate/Material    = "G4_POLYSTYRENE"
d:Ge/CellPlate/RMax         = Ge/SourceRMax  um
d:Ge/CellPlateThickness           = 2000 um
d:Ge/CellPlate/HL           = 0.5 * Ge/ElectronRangePH1 um
d:Ge/CellPlateNegHL          = -1 * Ge/CellPlate/HL um
d:Ge/CellPlate/TransZ          = Ge/CellPlateNegHL - Ge/HLCell um
s:Ge/CellPlate/Color = "grey"

# ---- Cell Layer ----
s:Ge/CellLayer/Parent = "World"
s:Ge/CellLayer/Type = "TsCylinder"
s:Ge/CellLayer/Material    = "MediumMaterial"
d:Ge/CellLayer/RMax         = Ge/SourceRMax um
d:Ge/CellLayer/HL           = Ge/HLCell um

# ---- Cell ----
s:Ge/Cell/Type                        = "TsMyCellWithNPs"
s:Ge/Cell/Parent                      = "CellLayer"
s:Ge/Cell/ComponentType               = "G4Tubs"
s:Ge/Cell/Material                    = "G4_WATER"
d:Ge/Cell/ComponentRadius             = Ge/RCell um
d:Ge/Cell/ComponentHL                 = Ge/HLCell um
d:Ge/Cell/ElementRadius	              = Ge/RNP nm
s:Ge/Cell/ElementMaterial             = Ma/NPMaterial
s:Ge/Cell/PositionsFile 	          = Ge/CellNPPositionsFile
s:Ge/Cell/Nucleus/Material                   = "G4_WATER"
s:Ge/Cell/Nucleus/Color                      = "White"
s:Ge/Cell/Nucleus/DNAModel                   = "Sphere"
d:Ge/Cell/Nucleus/NucleusRadius              = 4.65 um
i:Ge/Cell/Nucleus/HilbertCurveLayer          = 4
i:Ge/Cell/Nucleus/HilbertCurve3DRepeat       = 30
s:Ge/Cell/Nucleus/HilbertCurveFileName       = "supportFiles/HilbertPoints_iteration1.dat"
s:Ge/Cell/Nucleus/Voxel/Material             = "G4_WATER"
b:Ge/Cell/Nucleus/ShowDNAVoxels              = "false"
s:Ge/Cell/Nucleus/ChromatinFiber/Material    = "G4_WATER"
b:Ge/Cell/Nucleus/ShowChromatinCylinders     = "false"
s:Ge/Cell/Nucleus/Histone/Material           = "G4_HistoneMaterial"
b:Ge/Cell/Nucleus/OnlyBuildOneHistone        = "false"
b:Ge/Cell/Nucleus/HistoneAsScavenger         = "true"
b:Ge/Cell/Nucleus/AddBases                   = "true"
s:Ge/Cell/Nucleus/Base1/Material             = "G4_BaseMaterial"
s:Ge/Cell/Nucleus/Base2/Material             = "G4_BaseMaterial"
b:Ge/Cell/Nucleus/AddBackbone               = "true"
s:Ge/Cell/Nucleus/Backbone1/Material         = "G4_BackboneMaterial"
s:Ge/Cell/Nucleus/Backbone2/Material         = "G4_BackboneMaterial"
b:Ge/Cell/Nucleus/AddHydrationShell          = "true"
s:Ge/Cell/Nucleus/HydrationShell1/Material   = "G4_WATER_MODIFIED"
s:Ge/Cell/Nucleus/HydrationShell2/Material   = "G4_WATER_MODIFIED"




# ---- Incubation medium with material mixture ----
s:Ge/MediumVol/Parent      = "World"
s:Ge/MediumVol/Type        = "TsCylinder"
s:Ge/MediumVol/Material    = "MediumMaterial"
d:Ge/MediumVol/RMax        = Ge/SourceRMax um
d:Ge/MediumVol/HL          = 0.5 * Ge/ElectronRangePH1 um 
d:Ge/MediumVol/TransZ      = Ge/MediumVol/HL + Ge/HLCell um

# ---- Incubation medium with NPs ----
d:Ge/MediumDetailedThickness            = 0.2 um
s:Ge/MediumDetailed/Parent            = "MediumVol"
s:Ge/MediumDetailed/Type              = "TsDistributedComponents"
s:Ge/MediumDetailed/Material          = "G4_WATER"
s:Ge/MediumDetailed/ComponentType     = "G4Tubs"
d:Ge/MediumDetailed/ComponentRadius   = 1.25 * Ge/RNucleus um
d:Ge/MediumDetailed/ComponentHL       = 0.5 * Ge/MediumDetailedThickness um 
d:Ge/MediumDetailed/ElementRadius	  = Ge/RNP nm
s:Ge/MediumDetailed/ElementMaterial   = Ma/NPMaterial
s:Ge/MediumDetailed/PositionsFile 	  = Ge/MediumNPPositionsFile
d:Ge/MediumDetailed/TransZ            = Ge/MediumDetailed/ComponentHL - Ge/MediumVol/HL um

#############
# Materials #
#############

b:Ma/MediumMaterial/BuildFromMaterials  = "True"
sv:Ma/MediumMaterial/Components         = 2 "G4_WATER" Ma/NPMaterial   
uv:Ma/MediumMaterial/Fractions          = 2 0.999000999 0.00099900099 # use corresponding concentration of NPs
d:Ma/MediumMaterial/Density             = 1.001 g/cm3
s:Ma/MediumMaterial/DefaultColor        = "yellow"

# -- Materials
s:Ma/G4_HistoneMaterial/CloneFromMaterial   = "G4_WATER"
d:Ma/G4_HistoneMaterial/CloneWithDensity    = 1.407 g/cm3
s:Ma/G4_BaseMaterial/CloneFromMaterial      = "G4_WATER"
d:Ma/G4_BaseMaterial/CloneWithDensity       = 1.0 g/cm3
s:Ma/G4_BackboneMaterial/CloneFromMaterial  = "G4_WATER"
d:Ma/G4_BackboneMaterial/CloneWithDensity   = 1.0 g/cm3
s:Ma/G4_WATER_MODIFIED/CloneFromMaterial    = "G4_WATER"
d:Ma/G4_WATER_MODIFIED/CloneWithDensity     = 1.0 g/cm3


###########
# Scorers #
###########


b:Sc/DoseNucleus_Total/Active                         = "True"
s:Sc/DoseNucleus_Total/Quantity                       = "DoseToMedium"
s:Sc/DoseNucleus_Total/Component                      = "Cell"  # Target Cell component with nucleus subcomponent
sv:Sc/DoseNucleus_Total/Report                        = 7 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Histories"
s:Sc/DoseNucleus_Total/IfOutputFileAlreadyExists      = "Overwrite"
s:Sc/DoseNucleus_Total/OutputType                     = "csv"
#s:Sc/DoseNucleus_Total/OutputFile                    = "DoseToNucleus_Total"
b:Sc/DoseNucleus_Total/PropagateToChildren		      = "True"
#sv:Sc/DoseNucleus_Total/OnlyIncludeParticlesNamed     = 1 "e-"



b:Sc/EnergyToCell/Active                         = "True"
s:Sc/EnergyToCell/Quantity                       = "EnergyDeposit"
s:Sc/EnergyToCell/Component                      = "Cell"
sv:Sc/EnergyToCell/Report                        = 7 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Histories"
s:Sc/EnergyToCell/IfOutputFileAlreadyExists      = "Overwrite"
s:Sc/EnergyToCell/OutputType                     = "csv"
#s:Sc/EnergyToCell/OutputFile                    = "EnergyToCell"
b:Sc/EnergyToCell/PropagateToChildren		      = "True"
sv:Sc/EnergyToCell/OnlyIncludeIfInMaterial		      = 1 "G4_WATER"

# -- DNA Damage Scorer for Nucleus subcomponent --
includeFile									= supportFiles/DNAScorerStepByStep.txt
s:Sc/DNADamageScorer/Quantity				= "MyCellNucleusDNADamageSBS"
s:Sc/DNADamageScorer/Component 				= "Cell"  # Reference to Cell component (scorer will target nucleus subcomponent)
i:Sc/DNADamageScorer/NumberOfHistoriesInRun = 1
b:Sc/DNADamageScorer/PropagateToChildren = "true"
d:Sc/DNADamageScorer/ScoringRadius			= Ge/Cell/Nucleus/NucleusRadius um  # Use Cell nucleus radius parameter
i:Sc/DNADamageScorer/BasePairPositionAtGeometricHierarchy = 0
sv:Sc/DNADamageScorer/Strand1MaterialNames  = 4 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial" "G4_HistoneMaterial"
sv:Sc/DNADamageScorer/Strand2MaterialNames  = 3 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial"
#s:Sc/DNADamageScorer/PrimaryParticle		= "e-"
d:Sc/DNADamageScorer/MeanEnergy				= 30 keV
#d:Sc/DNADamageScorer/StopTrackingAtDose		= 1.0 gray
d:Sc/DNADamageScorer/ImageXMinPosition		= 0 um - Ge/Cell/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageXMaxPosition		= Ge/Cell/Nucleus/NucleusRadius um
d:Sc/DNADamageScorer/ImageYMinPosition		= 0 um - Ge/Cell/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageYMaxPosition		= Ge/Cell/Nucleus/NucleusRadius um
d:Sc/DNADamageScorer/ImageZMinPosition		= 0 um - Ge/Cell/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageZMaxPosition		= Ge/Cell/Nucleus/NucleusRadius um
b:Sc/DNADamageScorer/MinimalSDDOutput = "false"
d:Sc/DNADamageScorer/DirectDamageThreshold = 11.75 eV     # For half-cylindrical DNA model, the recommended value is 17.5 eV
s:Sc/DNADamageScorer/OutputFile = "DNADamage_Phase2"

# Geometry file for Nucleus scorer
s:Sc/DNADamageScorer/GeometryInfo			= "supportFiles/Geoinfo.txt"
s:Sc/DNADamageScorer/FileVoxelCopyNumbersInsideNucleus = "supportFiles/CopyNoTable.txt"
s:Sc/DNADamageScorer/MapChromosomeVoxelsFile = "supportFiles/signedCHVoxel.txt"

#s:Sc/PhSpNP/Quantity 					= "PhaseSpaceNP"

###########
# Physics #
###########



Ph/Default/Modules = 3 "g4em-dna" "TsEmDNAPhysics" "TsEmDNAChemistry" # "g4em-dna"  "g4em-livermore"
b:Ph/ListProcesses = "False"
#b:Ph/Default/PhysicsForGold/Active = "True"
#s:Ph/Default/PhysicsForGold/Region = Ge/Cell/AssignToRegionNamed
d:Ph/Default/SetProductionCutLowerEdge  	= 10 eV
d:Ph/Default/SetProductionCutHighEdge  		= 1 MeV
d:Ph/Default/CutForAllParticles  		= 0.1 nm
b:Ph/Default/Fluorescence  			= "True" # Set to true to turn on Fluorescence
b:Ph/Default/Auger 				= "True" # Set to true to turn on Auger
b:Ph/Default/AugerCascade 			= "True" # Set to true to turn on AugerCascade
b:Ph/Default/DeexcitationIgnoreCut 		= "True" # Set to true to implement DeexcitationIgnoreCut
b:Ph/Default/PIXE 				= "True" # Set to true to turn on PIXE"
d:Ph/Default/LowestElectronEnergy 		= 10 eV # 

#s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" 
#s:Ph/Default/SolvatedElectronThermalizationModel =  "Ritchie"


includeFile				= supportFiles/TOPASDefaultReactions.txt
s:Ch/ChemistryName			= "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive    = "True"
d:Ch/TOPASChemistry/ChemicalStageTimeEnd = 1 us
u:Ch/TOPASChemistry/Temperature = 37.0
b:Ch/TOPASChemistry/ApplyCorrectionScalingForTemperature = "True"

###########
# Graphics #
###########
b:Gr/View/IncludeAxes = "F"
d:Gr/View/AxesSize    = 5 mm
b:Gr/Enable          = "F"
b:Ts/UseQt = "F"
sv:Gr/OnlyIncludeParticlesNamed        = 1 "e-"

s:Gr/View/Type        = "OpenGL"

i:Ts/ShowHistoryCountAtInterval = 200000
i:So/PhSpSourceSup/PhaseSpaceMultipleUse  = 1

Tf/NumberOfSequentialTimes = 1

i:Ts/NumberOfThreads = -2 # defaults to 1
i:Ts/Seed = 1 
b:Ts/PauseBeforeQuit = "F"

b:Ts/ShowCPUTime = "True"
Ts/ParameterizationErrorMaxReports				= 1


