# ------ Include Files ------
includeFile = ./supportFiles/cell_parameters_SmallCell.txt
includeFile = ./supportFiles/np_parameters_AuNP15.txt
includeFile = ./supportFiles/source_parameters_I125Beam.txt

s:Ge/MediumNPPositionsFile     = "./supportFiles/positions_in_medium_1179_AuNPs.txt"   # AGuIX: 1308200_AGuIX, AuNP: 1179_AuNPs, Water: 1_NP  (values corresponding to 1 mg/ml)
s:Ge/CellNPPositionsFile       = "./supportFiles/positions_in_cell_55000_AuNPs.txt"   # AGuIX: 555000_AGuIX, AuNP: 35370 / 5000_AuNPs, Water: positions_in_cell_1_NP

s:Ge/CellPHSPName    = "I125Beam_PHSP"

###########
# Sources #
###########

# --- Phase Space ----

s:So/PhSpSourceSup/Type 				       = "PhaseSpace"
s:So/PhSpSourceSup/PhaseSpaceFileName			       = Ge/CellPHSPName
s:So/PhSpSourceSup/Component				       = "World"
b:So/PhSpSourceSup/PhaseSpaceIncludeEmptyHistories             = "False" # defaults to false
u:So/PhSpSourceSup/PhaseSpaceScaleXPosBy                       = 0.001 # turns the source phsp into a 30 um diameter disc
u:So/PhSpSourceSup/PhaseSpaceScaleYPosBy                       = 0.001
b:So/PhSpSourceSup/PhaseSpacePreCheck                          = "False" # defaults to true


############
# Geometry #
############

d:Ge/SourceRMax = Ge/RCell + Ge/ElectronRangePH1 um

# ---- World ----
s:Ge/World/Material    = "Vacuum"
s:Ge/World/Type        = "TsCylinder"
d:Ge/World/RMax         = 1.5 * Ge/SourceRMax um
d:Ge/World/HL         = Ge/ElectronRangePH1 + Ge/HLCell um
b:Ge/World/Invisible   = "F"

# ---- Polystirene cell plate ----
s:Ge/CellPlate/Parent = "World"
s:Ge/CellPlate/Type = "TsCylinder"
s:Ge/CellPlate/Material    = "G4_POLYSTYRENE"
d:Ge/CellPlate/RMax         = Ge/World/RMax  um
d:Ge/CellPlateThickness           = 2000 um
d:Ge/CellPlate/HL           = 0.5 * Ge/ElectronRangePH1 um
d:Ge/CellPlateNegHL          = -1 * Ge/CellPlate/HL um
d:Ge/CellPlate/TransZ          = Ge/CellPlateNegHL - Ge/HLCell um
s:Ge/CellPlate/Color = "grey"

# ---- Cell Layer ----
s:Ge/CellLayer/Parent = "World"
s:Ge/CellLayer/Type = "TsCylinder"
s:Ge/CellLayer/Material    = "MediumMaterial"
d:Ge/CellLayer/RMax         = Ge/SourceRMax um
d:Ge/CellLayer/HL           = Ge/HLCell um

# ---- Cell ----
s:Ge/Cell/Type                        = "TsDistributedComponents"
s:Ge/Cell/Parent                      = "CellLayer"
s:Ge/Cell/ComponentType               = "G4Tubs"
s:Ge/Cell/Material                    = "G4_WATER"
d:Ge/Cell/ComponentRadius             = Ge/RCell um
d:Ge/Cell/ComponentHL                 = Ge/HLCell um
d:Ge/Cell/ElementRadius	              = Ge/RNP nm
s:Ge/Cell/ElementMaterial             = Ma/NPMaterial
s:Ge/Cell/PositionsFile 	          = Ge/CellNPPositionsFile



# ---- Incubation medium with material mixture ----
s:Ge/MediumVol/Parent      = "World"
s:Ge/MediumVol/Type        = "TsCylinder"
s:Ge/MediumVol/Material    = "MediumMaterial"
d:Ge/MediumVol/RMax        = Ge/SourceRMax um
d:Ge/MediumVol/HL          = 0.5 * Ge/ElectronRangePH1 um 
d:Ge/MediumVol/TransZ      = Ge/MediumVol/HL + Ge/HLCell um

# ---- Incubation medium with NPs ----
d:Ge/MediumDetailedThickness            = 0.2 um
s:Ge/MediumDetailed/Parent            = "MediumVol"
s:Ge/MediumDetailed/Type              = "TsDistributedComponents"
s:Ge/MediumDetailed/Material          = "G4_WATER"
s:Ge/MediumDetailed/ComponentType     = "G4Tubs"
d:Ge/MediumDetailed/ComponentRadius   = 1.25 * Ge/RNucleus um
d:Ge/MediumDetailed/ComponentHL       = 0.5 * Ge/MediumDetailedThickness um 
d:Ge/MediumDetailed/ElementRadius	  = Ge/RNP nm
s:Ge/MediumDetailed/ElementMaterial   = Ma/NPMaterial
s:Ge/MediumDetailed/PositionsFile 	  = Ge/MediumNPPositionsFile
d:Ge/MediumDetailed/TransZ            = Ge/MediumDetailed/ComponentHL - Ge/MediumVol/HL um

#############
# Materials #
#############

b:Ma/MediumMaterial/BuildFromMaterials  = "True"
sv:Ma/MediumMaterial/Components         = 2 "G4_WATER" Ma/NPMaterial   
uv:Ma/MediumMaterial/Fractions          = 2 0.9990009990009991 0.0009990009990009992
d:Ma/MediumMaterial/Density             = 1.000948137402207 g/cm3
s:Ma/MediumMaterial/DefaultColor        = "yellow"


###########
# Scorers #
###########


b:Sc/EnergyToCell/Active                         = "True"
s:Sc/EnergyToCell/Quantity                       = "EnergyDeposit"
s:Sc/EnergyToCell/Component                      = "Cell"
sv:Sc/EnergyToCell/Report                        = 7 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Histories"
s:Sc/EnergyToCell/IfOutputFileAlreadyExists      = "Overwrite"
s:Sc/EnergyToCell/OutputType                     = "csv"
s:Sc/EnergyToCell/OutputFile                    = "EnergyToCell_chem"
b:Sc/EnergyToCell/PropagateToChildren		      = "False"
sv:Sc/EnergyToCell/OnlyIncludeIfInMaterial		      = 1 "G4_WATER"

s:Sc/PhSpNP/Quantity 					= "PhaseSpaceNP"
s:Sc/PhSpNP/Component 					= "Cell"
s:Sc/PhSpNP/Surface				        = "Cell/AnySurface"
s:Sc/PhSpNP/OutputType                 			= "ASCII" # ASCII, Binary, Limited or ROOT
s:Sc/PhSpNP/OutputFile = "PhaseSpace_NP_chem"
s:Sc/PhSpNP/IfOutputFileAlreadyExists			= "Overwrite"
b:Sc/PhSpNP/KillAfterPhaseSpace				= "False"

# Chemistry Scorer

u:perCent = 0.01 
d:MaxEn = 36 keV  # max for I125 Energy 

s:Sc/IRTGValue/Quantity = "TsIRTGValue"
s:Sc/IRTGValue/Component = "Cell"
s:Sc/IRTGValue/OutputType	= "ASCII" # ASCII, Binary, Limited or ROOT
d:Sc/IRTGValue/KillPrimaryIfEnergyLossExceeds       = MaxEn keV * perCent
d:Sc/IRTGValue/AbortEventIfPrimaryEnergyLossExceeds = 1.01 * Sc/IRTGValue/KillPrimaryIfEnergyLossExceeds keV
#d:Sc/IRTGValue/KillPrimaryIfEnergyLossExceeds = 10 eV
#d:Sc/IRTGValue/AbortEventIfPrimaryEnergyLossExceeds = 100 eV
d:Sc/IRTGValue/KillPrimaryBasedOnTrackLength        = 100 um
b:Sc/IRTGValue/OutputToConsole                   = "False"
s:Sc/IRTGValue/IfOutputFileAlreadyExists         = "Overwrite"
b:Sc/IRTGValue/PropagateToChildren = "False"

d:Sc/IRTGValue/CutoffTime = 1 us


###########
# Physics #
###########


Ph/Default/Modules = 3 "g4em-livermore" "TsEmDNAPhysics" "TsEmDNAChemistry" # "g4em-dna"  "g4em-livermore"
b:Ph/ListProcesses = "False"
#b:Ph/Default/PhysicsForGold/Active = "True"
#s:Ph/Default/PhysicsForGold/Region = Ge/Cell/AssignToRegionNamed
d:Ph/Default/SetProductionCutLowerEdge  	= 10 eV
d:Ph/Default/SetProductionCutHighEdge  		= 1 MeV
d:Ph/Default/CutForAllParticles  		= 0.1 nm
b:Ph/Default/Fluorescence  			= "True" # Set to true to turn on Fluorescence
b:Ph/Default/Auger 				= "True" # Set to true to turn on Auger
b:Ph/Default/AugerCascade 			= "True" # Set to true to turn on AugerCascade
b:Ph/Default/DeexcitationIgnoreCut 		= "True" # Set to true to implement DeexcitationIgnoreCut
b:Ph/Default/PIXE 				= "True" # Set to true to turn on PIXE"
d:Ph/Default/LowestElectronEnergy 		= 10 eV # 

#s:Ph/Default/Electron/SetElasticScatteringModel = "ELSEPA" 
#s:Ph/Default/SolvatedElectronThermalizationModel =  "Ritchie"


includeFile				= supportFiles/TOPAS-DefaultReactions.txt
s:Ch/ChemistryName			= "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive    = "True"
u:Ch/TOPASChemistry/Temperature = 37.0
b:Ch/TOPASChemistry/ApplyCorrectionScalingForTemperature = "True"

# G4DNA settings
s:Ge/Cell/AssignToRegionNamed = "cellreg"
s:Ph/Default/ForRegion/cellreg/ActiveG4EmModelFromModule = "TsEmDNAPhysics" # "g4em-dna" # "TsEmDNAPhysics" # 
d:Ph/Default/ForRegion/cellreg/SetProductionCutLowerEdge = 15 eV
d:Ph/Default/ForRegion/cellreg/SetProductionCutHighEdge = 1 MeV
d:Ph/Default/ForRegion/cellreg/EMRangeMin = 15 eV
d:Ph/Default/ForRegion/cellreg/EMRangeMax = 1 MeV
d:Ph/Default/ForRegion/cellreg/CutForElectrons = 0.1 nm

# Livermore settings
s:Ge/MediumDetailed/AssignToRegionNamed = "nocellreg"
s:Ge/World/AssignToRegionNamed = "nocellreg"
s:Ge/CellPlate/AssignToRegionNamed = "nocellreg"
s:Ge/MediumVol/AssignToRegionNamed = "nocellreg"
s:Ge/CellLayer/AssignToRegionNamed = "nocellreg"
s:Ph/Default/ForRegion/nocellreg/ActiveG4EmModelNamed = "g4em-livermore"
d:Ph/Default/ForRegion/nocellreg/SetProductionCutLowerEdge = 10 eV
d:Ph/Default/ForRegion/nocellreg/SetProductionCutHighEdge = 1 MeV
d:Ph/Default/ForRegion/nocellreg/EMRangeMin = 10 eV
d:Ph/Default/ForRegion/nocellreg/EMRangeMax = 1 MeV
d:Ph/Default/ForRegion/nocellreg/CutForElectrons = 0.1 nm

###########
# Graphics #
###########
b:Gr/View/IncludeAxes = "F"
d:Gr/View/AxesSize    = 5 mm
b:Gr/Enable          = "F"
b:Ts/UseQt = "F"
sv:Gr/OnlyIncludeParticlesNamed        = 1 "e-"

s:Gr/View/Type        = "OpenGL"

i:Ts/ShowHistoryCountAtInterval = 10000000
i:So/PhSpSourceSup/PhaseSpaceMultipleUse  = 1

# For testing
#i:Ts/ShowHistoryCountAtInterval = 100
#i:So/PhSpSourceSup/PhaseSpaceMultipleUse = 0
#i:So/PhSpSourceSup/NumberOfHistoriesInRun = 10000 # for testing

Tf/NumberOfSequentialTimes = 1

i:Ts/NumberOfThreads = -2 # defaults to 1
i:Ts/Seed = 30672
b:Ts/PauseBeforeQuit = "F"

b:Ts/ShowCPUTime = "True"
Ts/ParameterizationErrorMaxReports				= 1
Ts/MaxInterruptedHistories   = 2147483646


