# ------ Include Files ------
includeFile = ./supportFiles/cell_parameters_A549.txt

s:Ge/SourcePHSPName    = "nucleus_PHSP_electrons"

# -- Geometry
# World
d:Ge/World/HLX                          = 10.01 um
d:Ge/World/HLY                          = 10.01 um
d:Ge/World/HLZ                          = 10.01 um
b:Ge/World/Invisible                    = "true"
s:Ge/World/Material                     = "G4_WATER"

# Nucleus
s:Ge/Nucleus/Type                       = "TsNucleus"
s:Ge/Nucleus/Parent                     = "World"
s:Ge/Nucleus/Material                   = "G4_WATER"
s:Ge/Nucleus/Color                      = "White"
s:Ge/Nucleus/DNAModel					= "Sphere"  # modelo descrito en Bertolet 2022
d:Ge/Nucleus/NucleusRadius              = 4.65 um
#d:Ge/Nucleus/NucleusRadius              = Ge/RNucleus um
i:Ge/Nucleus/HilbertCurveLayer          = 4
i:Ge/Nucleus/HilbertCurve3DRepeat       = 30
s:Ge/Nucleus/HilbertCurveFileName       = "supportFiles/HilbertPoints_iteration1.dat"
s:Ge/Nucleus/Voxel/Material             = "G4_WATER"
b:Ge/Nucleus/ShowDNAVoxels              = "false"
s:Ge/Nucleus/ChromatinFiber/Material    = "G4_WATER"
b:Ge/Nucleus/ShowChromatinCylinders     = "false"
s:Ge/Nucleus/Histone/Material           = "G4_HistoneMaterial"
b:Ge/Nucleus/OnlyBuildOneHistone        = "false"
b:Ge/Nucleus/HistoneAsScavenger         = "true"
b:Ge/Nucleus/AddBases                   = "true"
s:Ge/Nucleus/Base1/Material             = "G4_BaseMaterial"
s:Ge/Nucleus/Base2/Material             = "G4_BaseMaterial"
b:Ge/Nucleus/AddBackbones               = "true"
s:Ge/Nucleus/Backbone1/Material         = "G4_BackboneMaterial"
s:Ge/Nucleus/Backbone2/Material         = "G4_BackboneMaterial"
b:Ge/Nucleus/AddHydrationShell          = "true"
s:Ge/Nucleus/HydrationShell1/Material   = "G4_WATER_MODIFIED"
s:Ge/Nucleus/HydrationShell2/Material   = "G4_WATER_MODIFIED"

# -- Materials
s:Ma/G4_HistoneMaterial/CloneFromMaterial   = "G4_WATER"
d:Ma/G4_HistoneMaterial/CloneWithDensity    = 1.407 g/cm3
s:Ma/G4_BaseMaterial/CloneFromMaterial      = "G4_WATER"
d:Ma/G4_BaseMaterial/CloneWithDensity       = 1.0 g/cm3
s:Ma/G4_BackboneMaterial/CloneFromMaterial  = "G4_WATER"
d:Ma/G4_BackboneMaterial/CloneWithDensity   = 1.0 g/cm3
s:Ma/G4_WATER_MODIFIED/CloneFromMaterial    = "G4_WATER"
d:Ma/G4_WATER_MODIFIED/CloneWithDensity     = 1.0 g/cm3

# -- Physics and Chemistry
sv:Ph/Default/Modules								= 3 "g4em-dna" "TsEmDNAPhysics" "TsEmDNAChemistry"
includeFile											= supportFiles/TOPASDefaultReactions.txt
s:Ch/ChemistryName									= "TOPASChemistry"
b:Ch/TOPASChemistry/ChemicalStageTransportActive    = "True"
#i:Ph/Verbosity                          			= 0

# -- Source and runs
s:So/PhSpSo/Type 									= "PhaseSpace"
s:So/PhSpSo/PhaseSpaceFileName						= Ge/SourcePHSPName
s:So/PhSpSo/Component								= "World"
b:Ge/Nucleus/RotateNucleusForEachRun				= "false"
# Producing separate runs instead of separate histories if rotation enabled
#d:Tf/TimelineStart 			 					    = 0. s
#d:Tf/TimelineEnd   			 					    = 10. s
#i:Tf/NumberOfSequentialTimes 						= 10000 # Number of runs

# -- Scorer --
includeFile									= ./supportFiles/DNAScorerStepByStep.txt
s:Sc/DNADamageScorer/Quantity				= "DNADamageNucleusStepByStep"
s:Sc/DNADamageScorer/Component 				= "Nucleus"
i:Sc/DNADamageScorer/NumberOfHistoriesInRun = 1000000
i:Sc/DNADamageScorer/BasePairPositionAtGeometricHierarchy = 0
sv:Sc/DNADamageScorer/Strand1MaterialNames  = 4 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial" "G4_HistoneMaterial"
sv:Sc/DNADamageScorer/Strand2MaterialNames  = 3 "G4_WATER_MODIFIED" "G4_BackboneMaterial" "G4_BaseMaterial"
#s:Sc/DNADamageScorer/PrimaryParticle		= "gamma"
d:Sc/DNADamageScorer/MeanEnergy				= 250 keV
#d:Sc/DNADamageScorer/StopTrackingAtDose		= 1.0 gray
d:Sc/DNADamageScorer/ImageXMinPosition		= 0 um - Ge/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageXMaxPosition		= Ge/Nucleus/NucleusRadius um
d:Sc/DNADamageScorer/ImageYMinPosition		= 0 um - Ge/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageYMaxPosition		= Ge/Nucleus/NucleusRadius um
d:Sc/DNADamageScorer/ImageZMinPosition		= 0 um - Ge/Nucleus/NucleusRadius
d:Sc/DNADamageScorer/ImageZMaxPosition		= Ge/Nucleus/NucleusRadius um

# Geometry file for Nucleus scorer
s:Sc/DNADamageScorer/GeometryInfo			= "supportFiles/Geoinfo.txt"
s:Sc/DNADamageScorer/FileVoxelCopyNumbersInsideNucleus = "supportFiles/CopyNoTable.txt"
s:Sc/DNADamageScorer/MapChromosomeVoxelsFile = "supportFiles/signedCHVoxel.txt"

Ts/ShowHistoryCountAtInterval                       = 1

# -- Visualization
#s:Gr/view/Type                          = "OpenGL"
#i:Gr/view/WindowSizeX                   = 800
#i:Gr/view/WindowSizeY                   = 800
#d:Gr/view/Theta                         = 45 deg
#d:Gr/view/Phi                           = 30 deg
#s:Gr/view/ColorBy                       = "ParticleType"
#sv:Gr/view/ColorByParticleTypeNames     = 4 "e-" "alpha" "proton" "neutron"
#sv:Gr/view/ColorByParticleTypeColors    = 4 "green" "red" "blue" "grass"
#s:Gr/view/BackgroundColor               = "White"


i:Ts/NumberOfThreads =1 # defaults to 1

