# ------ Include Files ------
includeFile = ./supportFiles/cell_parameters_MDAMB231.txt



s:Ge/SourcePHSPName    = "nucleus_PHSP"

###########
# Sources #
###########

# --- Phase Space ----

s:So/PhSpSourceSup/Type 				       = "PhaseSpace"
s:So/PhSpSourceSup/PhaseSpaceFileName			       = Ge/SourcePHSPName
s:So/PhSpSourceSup/Component				       = "World"
b:So/PhSpSourceSup/PhaseSpaceIncludeEmptyHistories             = "False" # defaults to false
b:So/PhSpSourceSup/PhaseSpacePreCheck                          = "False" # defaults to true


############
# Geometry #
############

Ge/QuitIfOverlapDetected = "false"

# ---- World ----
s:Ge/World/Material    = "Vacuum"   # "G4_WATER" "Vacuum"
#s:Ge/World/Type        = "TsSphere"
#d:Ge/World/Rmax         = 10 um
d:Ge/World/HLX         = 6 um
d:Ge/World/HLY         = 6 um
d:Ge/World/HLZ         = 6 um
b:Ge/World/Invisible   = "F"


# Nucleus
s:Ge/Nucleus/Type                       = "TsSphere"
s:Ge/Nucleus/Parent                     = "World"
s:Ge/Nucleus/Material                   = "G4_WATER"
s:Ge/Nucleus/Color                      = "White"
d:Ge/Nucleus/Rmax                       = 4.65 um



###########
# Scorers #
###########


b:Sc/DoseNucleus_Ph3/Active                         = "True"
s:Sc/DoseNucleus_Ph3/Quantity                       = "DoseToMedium"
s:Sc/DoseNucleus_Ph3/Component                      = "Nucleus"
sv:Sc/DoseNucleus_Ph3/Report                        = 7 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Histories"
s:Sc/DoseNucleus_Ph3/IfOutputFileAlreadyExists      = "Overwrite"
s:Sc/DoseNucleus_Ph3/OutputType                     = "csv"
s:Sc/DoseNucleus_Ph3/OutputFile                    = "nucleus_dose_Ph3"
b:Sc/DoseNucleus_Ph3/PropagateToChildren		      = "True"
#sv:Sc/DoseNucleus_Ph3/OnlyIncludeParticlesNamed     = 1 "e-"



###########
# Physics #
###########


Ph/Default/Modules = 1 "TsEmDNAPhysics" # "g4em-dna"  "g4em-livermore"
b:Ph/ListProcesses = "False"
d:Ph/Default/SetProductionCutLowerEdge  	= 10 eV
d:Ph/Default/SetProductionCutHighEdge  		= 1 MeV
d:Ph/Default/CutForAllParticles  		= 0.1 nm
b:Ph/Default/Fluorescence  			= "True" # Set to true to turn on Fluorescence
b:Ph/Default/Auger 				= "True" # Set to true to turn on Auger
b:Ph/Default/AugerCascade 			= "True" # Set to true to turn on AugerCascade
b:Ph/Default/DeexcitationIgnoreCut 		= "True" # Set to true to implement DeexcitationIgnoreCut
b:Ph/Default/PIXE 				= "True" # Set to true to turn on PIXE"
d:Ph/Default/LowestElectronEnergy 		= 10 eV # 


###########
# Graphics #
###########
b:Gr/View/IncludeAxes = "F"
d:Gr/View/AxesSize    = 5 mm
b:Gr/Enable          = "F"
b:Ts/UseQt = "F"
sv:Gr/OnlyIncludeParticlesNamed        = 1 "e-"

s:Gr/View/Type        = "OpenGL"

i:Ts/ShowHistoryCountAtInterval = 10000
i:So/PhSpSourceSup/PhaseSpaceMultipleUse  = 1

Tf/NumberOfSequentialTimes = 1

i:Ts/NumberOfThreads = -4 # defaults to 1
i:Ts/Seed = 3
b:Ts/PauseBeforeQuit = "F"

b:Ts/ShowCPUTime = "True"
Ts/ParameterizationErrorMaxReports				= 1

