# ------ Include Files ------
includeFile = ./supportFiles/cell_parameters.txt
includeFile = ./supportFiles/np_parameters_AGuIX.txt
includeFile = ./supportFiles/source_parameters_TrueBeam.txt

s:Ge/CellPHSPName    = "TrueBeam_CellPHSP"

###########
# Sources #
###########

# --- Phase Space ----

s:So/PhSpSource/Type 									    = "PhaseSpace"
s:So/PhSpSource/PhaseSpaceFileName						    = "TrueBeam6FFF_10x10"
s:So/PhSpSource/Component								    = "BeamPosition"
b:So/PhSpSource/PhaseSpaceIncludeEmptyHistories             = "False" # defaults to false
b:So/PhSpSource/PhaseSpacePreCheck                          = "False" # defaults to true
i:So/PhSpSource/PhaseSpaceMultipleUse                       = 10
#i:So/PhSpSource/NumberOfHistoriesInRun                      = 100
#b:So/PhSpSource/LimitedAssumeFirstParticleIsNewHistory     = "true"
#b:So/PhSpSource/LimitedAssumeEveryParticleIsNewHistory     = "true"
#b:So/PhSpSource/LimitedAssumePhotonIsNewHistory            = "true"

############
# Geometry #
############


# ---- World ----
s:Ge/World/Material    = "G4_AIR"
d:Ge/World/HLX         = 50 cm
d:Ge/World/HLY         = 50 cm
d:Ge/World/HLZ         = 70 cm
b:Ge/World/Invisible   = "F"

# ---- Beam ----
s:Ge/BeamPosition/Parent = "World"
s:Ge/BeamPosition/Type = "Group"
d:Ge/BeamPosition/TransZ = -140 cm
d:Ge/BeamPosition/RotX = 0. deg

# ---- Solid Water down ----
s:Ge/SolidWaterDown/Parent = "World"
s:Ge/SolidWaterDown/Type = "TsBox"
s:Ge/SolidWaterDown/Material    = "G4_WATER"
d:Ge/SolidWaterDown/HLX         = 15 cm
d:Ge/SolidWaterDown/HLY         = 15 cm
d:Ge/SolidWaterDown/HLZ         = 5 cm
d:Ge/SolidWaterDownNegHL          = -52000 um
d:Ge/SolidWaterDown/TransZ          = Ge/SolidWaterDownNegHL - Ge/HLCell um
s:Ge/SolidWaterDown/Color = "brown"

# ---- Polystirene cell plate ----
s:Ge/CellPlate/Parent = "World"
s:Ge/CellPlate/Type = "TsCylinder"
s:Ge/CellPlate/Material    = "G4_POLYSTYRENE"
d:Ge/CellPlate/RMax         = Ge/WellRadius um
d:Ge/CellPlateThickness           = 2000 um
d:Ge/CellPlate/HL           = 0.5 * Ge/CellPlateThickness um
d:Ge/CellPlateNegHL          = -1 * Ge/CellPlate/HL um
d:Ge/CellPlate/TransZ          = Ge/CellPlateNegHL - Ge/HLCell um
s:Ge/CellPlate/Color = "grey"

# ---- Cell Layer ----
s:Ge/CellLayer/Parent = "World"
s:Ge/CellLayer/Type = "TsCylinder"
s:Ge/CellLayer/Material    = "G4_WATER"
d:Ge/CellLayer/RMax         = Ge/WellRadius um
d:Ge/CellLayer/HL           = Ge/HLCell um

# ---- Incubation medium with material mixture ----
s:Ge/MediumVol/Parent      = "World"
s:Ge/MediumVol/Type        = "TsCylinder"
s:Ge/MediumVol/Material    = Ge/MediumMaterial
d:Ge/MediumVol/RMax        = Ge/WellRadius um
d:Ge/MediumVol/HL          = 0.5 * Ge/MediumThickness um
d:Ge/MediumVol/TransZ      = Ge/MediumVol/HL + Ge/HLCell um

# ---- Cylinder for PHSP scoring -----
d:Ge/CylinderForPHSPHL = 0.5 * Ge/ElectronRangeAboveCell um
s:Ge/CylinderForPHSP/Parent = "World"
s:Ge/CylinderForPHSP/Type = "TsCylinder"
d:Ge/CylinderForPHSP/Rmax = 1000 * Ge/RCell um
d:Ge/CylinderForPHSP/HL   = Ge/CylinderForPHSPHL + Ge/HLCell um
d:Ge/CylinderForPHSP/TransZ = Ge/CylinderForPHSP/HL - Ge/HLCell um
b:Ge/CylinderForPHSP/IsParallel = "True"

# ---- Cylinder for Dose scoring -----
s:Ge/CylinderForDose/Parent = "World"
s:Ge/CylinderForDose/Type = "TsCylinder"
d:Ge/CylinderForDose/Rmax = 1000 * Ge/RCell um
d:Ge/CylinderForDose/HL   = 10 * Ge/HLCell um
d:Ge/CylinderForDose/TransZ = Ge/CylinderForDose/HL - Ge/HLCell um
b:Ge/CylinderForDose/IsParallel = "True"


###########
# Scorers #
###########

s:Sc/TrueBeam_CellPHSP/Quantity									        = "PhaseSpace"
s:Sc/TrueBeam_CellPHSP/Component									    = "CylinderForPHSP"
s:Sc/TrueBeam_CellPHSP/Surface										    = "CylinderForPHSP/AnySurface"
s:Sc/TrueBeam_CellPHSP/OutputType									    = "ASCII"
s:Sc/TrueBeam_CellPHSP/OutputFile									    =Ge/CellPHSPName
s:Sc/TrueBeam_CellPHSP/IfOutputFileAlreadyExists					    = "Overwrite"
s:Sc/TrueBeam_CellPHSP/OnlyIncludeParticlesGoing 					    = "In"
b:Sc/TrueBeam_CellPHSP/KillAfterPhaseSpace 						        = "False"
sv:Sc/TrueBeam_CellPHSP/OnlyIncludeParticlesNamed 					    = 2 "gamma" "e-"
s:Sc/TrueBeam_CellPHSP/IncludeEmptyHistories                            = "None" # "None", "InSequence", "AtEndOfRun" or "AtEndOfFile"

b:Sc/DoseCell/Active                                   = "True"
s:Sc/DoseCell/Quantity                               = "DoseToMedium"
s:Sc/DoseCell/Component                              = "CylinderForDose"
sv:Sc/DoseCell/Report                                 = 7 "Sum" "Mean" "Count_in_bin" "Second_Moment" "Variance" "Standard_Deviation" "Histories"
s:Sc/DoseCell/IfOutputFileAlreadyExists              = "Overwrite"
s:Sc/DoseCell/OutputType                             = "csv"
s:Sc/DoseCell/OutputFile                 		    = "./DoseToCell"
b:Sc/DoseCell/PropagateToChildren		            = "False"

###########
# Physics #
###########

Ph/Default/Modules = 1 "g4em-livermore"
b:Ph/ListProcesses = "False"

d:Ph/Default/CutForAllParticles  							= 100 nm
b:Ph/Default/Fluorescence  									= "False" # Set to true to turn on Fluorescence
b:Ph/Default/Auger 											= "False" # Set to true to turn on Auger
b:Ph/Default/AugerCascade 									= "False" # Set to true to turn on AugerCascade
b:Ph/Default/DeexcitationIgnoreCut 							= "False" # Set to true to implement DeexcitationIgnoreCut
b:Ph/Default/PIXE 											= "False" # Set to true to turn on PIXE"
d:Ph/Default/LowestElectronEnergy 							= Ph/ElectronLowEnergyLimit eV 

###########
# Graphics #
###########
b:Gr/View/IncludeAxes = "F"
d:Gr/View/AxesSize    = 5 mm
b:Gr/Enable          = "F"
b:Ts/UseQt = "F"
#sv:Gr/OnlyIncludeParticlesNamed        = 1 "e-"

s:Gr/View/Type        = "OpenGL"

i:Ts/ShowHistoryCountAtInterval = 1000

i:Ts/NumberOfThreads = 1 # defaults to 1
i:Ts/Seed = 1 # default is 1
b:Ts/PauseBeforeQuit = "F"

b:Ts/ShowCPUTime = "True"


